load_file("nrngui.hoc")

// cell-1 used for the models for the Science-Reports manuscript
// filled and stained from Ronging Chen
// reconstructed by Jochen Staiger, 
// implemented as 3D model by Namrata Mohapatra
// shrinkage corrention according to Staiger et al. (2015, Br.Str.Funct.) x-,y-axis *1.125, z-axis * 1.5, d * 1.125
// for revision new implementation of biophysical properties 
// by Aniello Lombardi & W. Kilb 
// last change 26. Aug. 2020

// definition of parameters

cm_val = 1           // capacitance
Ra_val = 35.4        // axonal resistance
g_pas_val = 0.00001705  // mS/cm2 passive leak conductance
e_pas_val = -74.05      // reversal passive conductance
Cli_val = 15       // steady-state [Cl-]i for transport from Results
                     // Cli_val = 12.6   for determining the tonic Cl- fluxes
Cli_init = 17.7            // initial [Cl-]i for transport
Cle_val = 133.5          // constant extracellular [Cl-]i
tau_NKCC1_val = 78500   // (ms) : determined as fit from Eexperiments after depletion
tau_passive_val = 99999999 // (ms) : i.e. shut-of of CL-influx in NKCC1 Model
tonic_leak_value = 0.00000875 //  mS/cm2


proc celldef() {
  topol()
  subsets()
  geom()
  geom_nseg()
  biophys()
}

create soma, dend[11], apic[128]

proc topol() { local i
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend(1)
  connect dend[3](0), soma(0.5)
  for i = 4, 5 connect dend[i](0), dend[i-1](1)
  connect dend[6](0), dend[4](1)
  connect dend[7](0), dend[3](1)
  connect dend[8](0), soma(0.5)
  for i = 9, 10 connect dend[i](0), dend[8](1)
  connect apic(0), soma(0.5)
  for i = 1, 2 connect apic[i](0), apic(1)
  for i = 3, 9 connect apic[i](0), apic[i-1](1)
  connect apic[10](0), apic[8](1)
  for i = 11, 13 connect apic[i](0), apic[i-1](1)
  connect apic[14](0), apic[12](1)
  for i = 15, 16 connect apic[i](0), apic[i-1](1)
  connect apic[17](0), apic[15](1)
  connect apic[18](0), apic[14](1)
  for i = 19, 20 connect apic[i](0), apic[18](1)
  for i = 21, 22 connect apic[i](0), apic[i-1](1)
  connect apic[23](0), apic[21](1)
  connect apic[24](0), apic[20](1)
  for i = 25, 26 connect apic[i](0), apic[i-1](1)
  connect apic[27](0), apic[25](1)
  connect apic[28](0), apic[24](1)
  for i = 29, 30 connect apic[i](0), apic[i-1](1)
  connect apic[31](0), apic[29](1)
  connect apic[32](0), apic[28](1)
  for i = 33, 34 connect apic[i](0), apic[32](1)
  for i = 35, 36 connect apic[i](0), apic[i-1](1)
  connect apic[37](0), apic[35](1)
  connect apic[38](0), apic[34](1)
  for i = 39, 40 connect apic[i](0), apic[38](1)
  for i = 41, 42 connect apic[i](0), apic[40](1)
  for i = 43, 44 connect apic[i](0), apic[i-1](1)
  connect apic[45](0), apic[43](1)
  for i = 46, 47 connect apic[i](0), apic[i-1](1)
  connect apic[48](0), apic[46](1)
  connect apic[49](0), apic[45](1)
  for i = 50, 51 connect apic[i](0), apic[i-1](1)
  connect apic[52](0), apic[50](1)
  connect apic[53](0), apic[49](1)
  for i = 54, 55 connect apic[i](0), apic[i-1](1)
  connect apic[56](0), apic[54](1)
  connect apic[57](0), apic[53](1)
  connect apic[58](0), apic[42](1)
  for i = 59, 60 connect apic[i](0), apic[58](1)
  for i = 61, 62 connect apic[i](0), apic[60](1)
  for i = 63, 64 connect apic[i](0), apic[62](1)
  for i = 65, 66 connect apic[i](0), apic[64](1)
  connect apic[67](0), apic[11](1)
  connect apic[68](0), apic[10](1)
  for i = 69, 70 connect apic[i](0), apic[68](1)
  for i = 71, 72 connect apic[i](0), apic[70](1)
  connect apic[73](0), apic[7](1)
  connect apic[74](0), apic[6](1)
  for i = 75, 77 connect apic[i](0), apic[74](1)
  for i = 78, 79 connect apic[i](0), apic[77](1)
  connect apic[80](0), apic[5](1)
  for i = 81, 82 connect apic[i](0), apic[i-1](1)
  connect apic[83](0), apic[81](1)
  connect apic[84](0), apic[80](1)
  connect apic[85](0), apic[4](1)
  for i = 86, 87 connect apic[i](0), apic[85](1)
  for i = 88, 89 connect apic[i](0), apic[87](1)
  for i = 90, 91 connect apic[i](0), apic[89](1)
  for i = 92, 96 connect apic[i](0), apic[i-1](1)
  connect apic[97](0), apic[95](1)
  for i = 98, 99 connect apic[i](0), apic[97](1)
  connect apic[100](0), apic[94](1)
  connect apic[101](0), apic[93](1)
  connect apic[102](0), apic[92](1)
  for i = 103, 105 connect apic[i](0), apic[i-1](1)
  connect apic[106](0), apic[104](1)
  connect apic[107](0), apic[103](1)
  for i = 108, 109 connect apic[i](0), apic[107](1)
  for i = 110, 111 connect apic[i](0), apic[109](1)
  for i = 112, 113 connect apic[i](0), apic[111](1)
  for i = 114, 115 connect apic[i](0), apic[113](1)
  connect apic[116](0), apic[102](1)
  for i = 117, 118 connect apic[i](0), apic[i-1](1)
  connect apic[119](0), apic[117](1)
  for i = 120, 121 connect apic[i](0), apic[119](1)
  connect apic[122](0), apic[116](1)
  connect apic[123](0), apic[91](1)
  connect apic[124](0), apic[3](1)
  connect apic[125](0), apic[2](1)
  for i = 126, 127 connect apic[i](0), apic[125](1)
  basic_shape()
}

// Corrected for shrinkage -  original values in comment

proc shape3d_1() {
  soma {pt3dclear()
      pt3dadd(-1.1460, 0.8770, 0.1081, 13.9830)        // pt3dadd(-1.01868, 0.779569, 0.0720982, 12.4293)
      pt3dadd(-0.6987, 1.1345, 3.1238, 14.7427)        // pt3dadd(-0.62103, 1.00844, 2.08255, 13.1046)
      pt3dadd(-1.0261, 1.0818, 6.2527, 14.3434)        // pt3dadd(-0.912133, 0.961626, 4.16848, 12.7497)
      pt3dadd(-0.8237, 1.2889, 9.7018, 12.7457)        // pt3dadd(-0.732204, 1.14569, 6.46784, 11.3295)
      pt3dadd(-1.3223, 1.1799, 11.6873, 10.2843)        // pt3dadd(-1.17537, 1.04884, 7.79156, 9.14164)
      pt3dadd(-1.4418, 0.1871, -2.8950, 11.5320)        // pt3dadd(-1.28163, 0.1663, -1.93, 10.2507)
      pt3dadd(-0.7657, -0.2015, -3.9300, 9.0240)        // pt3dadd(-0.680597, -0.179096, -2.62, 8.02132)
  }
  dend {pt3dclear()
      pt3dstyle(1.0000, -1.3398, 1.0346, 9.5525)        // pt3dstyle(1, -1.19093, 0.919634, 6.36831)
      pt3dadd(0.7875, -5.4563, -3.4050, 1.7100)        // pt3dadd(0.7, -4.85, -2.27, 1.52)
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  }
}
proc shape3d_2() {
  apic[3] {
      pt3dadd(4.2075, 31.5338, 56.7150, 0.7875)        // pt3dadd(3.74, 28.03, 37.81, 0.7)
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  }
}
proc shape3d_3() {
  apic[15] {
      pt3dadd(17.9663, 20.3400, 28.1400, 0.9225)        // pt3dadd(15.97, 18.08, 18.76, 0.82)
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  }
}
proc shape3d_4() {
  apic[20] {  }
  apic[21] {pt3dclear()
      pt3dadd(28.2375, 18.1125, 30.7800, 1.3163)        // pt3dadd(25.1, 16.1, 20.52, 1.17)
      pt3dadd(29.8238, 17.3250, 31.7250, 1.3163)        // pt3dadd(26.51, 15.4, 21.15, 1.17)
      pt3dadd(30.3525, 16.7963, 31.2900, 1.0575)        // pt3dadd(26.98, 14.93, 20.86, 0.94)
      pt3dadd(30.6113, 16.2675, 31.8150, 0.7875)        // pt3dadd(27.21, 14.46, 21.21, 0.7)
      pt3dadd(30.7463, 16.0088, 31.8150, 0.7875)        // pt3dadd(27.33, 14.23, 21.21, 0.7)
      pt3dadd(30.8813, 15.3450, 31.9800, 0.7875)        // pt3dadd(27.45, 13.64, 21.32, 0.7)
      pt3dadd(31.0163, 14.2988, 31.9800, 0.9225)        // pt3dadd(27.57, 12.71, 21.32, 0.82)
      pt3dadd(31.1400, 13.7700, 32.2350, 0.9225)        // pt3dadd(27.68, 12.24, 21.49, 0.82)
      pt3dadd(31.4100, 12.5888, 33.4350, 0.7875)        // pt3dadd(27.92, 11.19, 22.29, 0.7)
      pt3dadd(31.8038, 12.4538, 33.4350, 0.7875)        // pt3dadd(28.27, 11.07, 22.29, 0.7)
      pt3dadd(32.3325, 12.0600, 32.6550, 0.7875)        // pt3dadd(28.74, 10.72, 21.77, 0.7)
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  }
}
proc shape3d_5() {
  apic[30] {
      pt3dadd(41.1638, 11.1375, 44.0850, 0.9225)        // pt3dadd(36.59, 9.9, 29.39, 0.82)
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  }
}
proc shape3d_6() {
  apic[36] {
      pt3dadd(32.5913, 23.2425, 50.6550, 1.3163)        // pt3dadd(28.97, 20.66, 33.77, 1.17)
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  }
}
proc shape3d_7() {
  apic[41] {
      pt3dadd(50.5238, 44.2800, 48.9450, 0.5288)        // pt3dadd(44.91, 39.36, 32.63, 0.47)
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  }
}
proc shape3d_8() {
  apic[46] {
      pt3dadd(45.9225, 84.0263, 85.4400, 1.1813)        // pt3dadd(40.82, 74.69, 56.96, 1.05)
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  }
}
proc shape3d_9() {
  apic[47] {
      pt3dadd(67.9388, 118.2263, 124.7550, 0.3938)        // pt3dadd(60.39, 105.09, 83.17, 0.35)
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  }
}
proc shape3d_10() {
  apic[51] {
      pt3dadd(34.4588, 117.5625, 107.3550, 0.9225)        // pt3dadd(30.63, 104.5, 71.57, 0.82)
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  }
}
proc shape3d_11() {
  apic[53] {
      pt3dadd(23.9738, 111.7688, 100.1100, 0.5288)        // pt3dadd(21.31, 99.35, 66.74, 0.47)
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  }
}
proc shape3d_12() {
  apic[55] {
      pt3dadd(27.7313, 162.1463, 131.1600, 0.9225)        // pt3dadd(24.65, 144.13, 87.44, 0.82)
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  }
}
proc shape3d_13() {
  apic[58] {
      pt3dadd(16.2113, 108.7538, 92.0100, 1.1813)        // pt3dadd(14.41, 96.67, 61.34, 1.05)
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  }
}
proc shape3d_14() {
  apic[60] {
      pt3dadd(7.7738, 146.6325, 102.4950, 1.3163)        // pt3dadd(6.91, 130.34, 68.33, 1.17)
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  }
}
proc shape3d_15() {
  apic[66] {  }
  apic[67] {pt3dclear()
      pt3dadd(-11.9925, 35.9100, 15.7800, 1.1813)        // pt3dadd(-10.66, 31.92, 10.52, 1.05)
      pt3dadd(-13.1400, 34.1775, 18.2550, 1.1813)        // pt3dadd(-11.68, 30.38, 12.17, 1.05)
      pt3dadd(-14.0625, 33.9188, 19.6200, 1.0575)        // pt3dadd(-12.5, 30.15, 13.08, 0.94)
      pt3dadd(-14.5913, 32.8613, 20.2050, 1.0575)        // pt3dadd(-12.97, 29.21, 13.47, 0.94)
      pt3dadd(-14.9850, 31.8150, 19.9500, 0.9225)        // pt3dadd(-13.32, 28.28, 13.3, 0.82)
      pt3dadd(-15.3788, 30.8925, 20.4600, 0.7875)        // pt3dadd(-13.67, 27.46, 13.64, 0.7)
      pt3dadd(-16.0313, 30.4988, 20.8050, 0.9225)        // pt3dadd(-14.25, 27.11, 13.87, 0.82)
      pt3dadd(-16.5600, 29.8463, 20.2950, 0.9225)        // pt3dadd(-14.72, 26.53, 13.53, 0.82)
      pt3dadd(-17.0888, 29.7113, 20.2950, 0.9225)        // pt3dadd(-15.19, 26.41, 13.53, 0.82)
      pt3dadd(-17.6175, 28.6538, 20.2950, 1.0575)        // pt3dadd(-15.66, 25.47, 13.53, 0.94)
      pt3dadd(-17.6175, 28.3950, 20.2950, 1.0575)        // pt3dadd(-15.66, 25.24, 13.53, 0.94)
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  }
}
proc shape3d_16() {
  apic[69] {
      pt3dadd(-34.5150, 34.5938, 16.9650, 1.3163)        // pt3dadd(-30.68, 30.75, 11.31, 1.17)
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  }
}
proc shape3d_17() {
  apic[72] {
      pt3dadd(-67.4213, 35.4938, 25.6650, 0.9225)        // pt3dadd(-59.93, 31.55, 17.11, 0.82)
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  }
}
proc shape3d_18() {
  apic[73] {
      pt3dadd(-27.0900, 63.5063, 37.7700, 0.5288)        // pt3dadd(-24.08, 56.45, 25.18, 0.47)
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  }
}
proc shape3d_19() {
  apic[82] {
      pt3dadd(1.0913, 17.3925, 36.1500, 1.3163)        // pt3dadd(0.97, 15.46, 24.1, 1.17)
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  }
}
proc shape3d_20() {
  apic[86] {
      pt3dadd(0.4613, 54.9563, 46.3050, 0.9225)        // pt3dadd(0.41, 48.85, 30.87, 0.82)
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  }
}
proc shape3d_21() {
  apic[93] {
      pt3dadd(8.3588, 108.3600, 58.0650, 1.1813)        // pt3dadd(7.43, 96.32, 38.71, 1.05)
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  }
}
proc shape3d_22() {
  apic[95] {
      pt3dadd(12.3750, 192.8138, 92.7000, 1.4513)        // pt3dadd(11, 171.39, 61.8, 1.29)
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  }
}
proc shape3d_23() {
  apic[101] {
      pt3dadd(-20.8463, 179.9213, 70.5150, 0.3938)        // pt3dadd(-18.53, 159.93, 47.01, 0.35)
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  }
}
proc shape3d_24() {
  apic[107] {
      pt3dadd(2.1038, 120.8700, 73.8450, 0.9225)        // pt3dadd(1.87, 107.44, 49.23, 0.82)
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  }
}
proc shape3d_25() {
  apic[110] {
      pt3dadd(-8.6963, 193.3200, 108.4650, 0.6638)        // pt3dadd(-7.73, 171.84, 72.31, 0.59)
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  }
}
proc shape3d_26() {
  apic[116] {
      pt3dadd(-14.0513, 117.7088, 63.3600, 0.9225)        // pt3dadd(-12.49, 104.63, 42.24, 0.82)
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  }
}
proc shape3d_27() {
  apic[118] {
      pt3dadd(-86.0175, 181.2600, 102.2400, 1.0575)        // pt3dadd(-76.46, 161.12, 68.16, 0.94)
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  }
}
proc shape3d_28() {
  apic[122] {
      pt3dadd(-31.4100, 163.3613, 94.2300, 0.7875)        // pt3dadd(-27.92, 145.21, 62.82, 0.7)
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  }
}
proc shape3d_29() {
  apic[123] {
      pt3dadd(4.4775, 70.0988, 55.5150, 0.3938)        // pt3dadd(3.98, 62.31, 37.01, 0.35)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
}

objref all, somatic, basal, apical
proc subsets() { local i
    objref all
    all = new SectionList()
    soma all.append()
    for i=0, 10 dend[i] all.append()
    for i=0, 127 apic[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  basal = new SectionList()
    for i=0, 10 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 127 apic[i] apical.append()

}

proc geom() {
}

proc geom_nseg() {
area(0.5) // make sure diam reflects 3d points
forall { 
     //nseg = int((L/(d_lambda*lambda_f(freq))+0.9)/2)*2 + 1
//printf("%g", nseg) - For debugging 
nseg=7
  }
}

      //soma {nseg = 1}
// Sets nseg in each section to an odd value so that its segments are no longer than 
//  d_lambda x the AC length constant at frequency freq in that section.

     //freq = 1000    //original:100     // Hz, frequency at which AC length constant will be computed
     //d_lambda = 0.1 //original:0.1

     //func lambda_f() { local i, x1, x2, d1, d2, lam
     //        if (n3d() < 2) {
     //                return 1e5*sqrt(diam/(4*PI*$1*Ra*cm))
     //        }
// above was too inaccurate with large variation in 3d diameter
// so now we use all 3-d points to get a better approximate lambda
     //        x1 = arc3d(0)
     //        d1 = diam3d(0)
     //        lam = 0
     //        for i=1, n3d()-1 {
     //                x2 = arc3d(i)
     //                d2 = diam3d(i)
     //                lam += (x2 - x1)/sqrt(d1 + d2)
     //                x1 = x2   d1 = d2
     //        }
        //  length of the section in units of lambda
     //        lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm)
     //
     //        return L/lam
     //}


access soma

proc biophys() {
  forsec all {
    cm = cm_val
    Ra = Ra_val
    insert cldif_CA3_NKCC1_HCO3
      cli0_cldif_CA3_NKCC1_HCO3 = Cli_val
      clo0_cldif_CA3_NKCC1_HCO3 = Cle_val
      cli_cldif_CA3_NKCC1_HCO3=Cli_val
      clo_cldif_CA3_NKCC1_HCO3=Cle_val
      cli_Start_cldif_CA3_NKCC1_HCO3 = Cli_init

      hco3i0_cldif_CA3_NKCC1_HCO3 = 14.1
      hco3o0_cldif_CA3_NKCC1_HCO3 = 24
      hco3i_cldif_CA3_NKCC1_HCO3=14.1
      hco3o_cldif_CA3_NKCC1_HCO3=24
      hco3i_Start_cldif_CA3_NKCC1_HCO3 = 14.1

      tau_NKCC1_cldif_CA3_NKCC1_HCO3 = tau_NKCC1_val 
      tau_passive_cldif_CA3_NKCC1_HCO3 = tau_passive_val

      celsius = 31

    insert tonic
       leak_tonic = tonic_leak_value
       P_tonic = 0.0
       HCO3e_tonic = 24
       HCO3i_tonic = 14.1
       

  }

  forsec somatic {
     insert pas
        g_pas = g_pas_val
        e_pas = e_pas_val
   }

  forsec apical {
     insert pas
        g_pas = g_pas_val
        e_pas = e_pas_val
  }

  forsec basal {
     insert pas
        g_pas = g_pas_val
        e_pas = e_pas_val
  }
}



celldef()

//define ionic concentrations
cli0_cl_ion = cli0_cldif_CA3_NKCC1_HCO3
clo0_cl_ion = clo0_cldif_CA3_NKCC1_HCO3
hco3i0_hco3_ion = hco3i0_cldif_CA3_NKCC1_HCO3
hco3o0_hco3_ion = hco3o0_cldif_CA3_NKCC1_HCO3























































































